// Detect mean alphaSMA coherency and intensity levels on very confluent cells using a Voronoi approach to segment image.
// By Joao Firmino, PhD
// v1.0

#@ File (label = "Input directory", style = "directory") input
#@ File (label = "Output directory", style = "directory") output
#@ String (label = "File suffix", value = ".czi") suffix

processFolder(input);

// function to scan folders/subfolders/files to find files with correct suffix
function processFolder(input) {
	list = getFileList(input);
	list = Array.sort(list);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(input + File.separator + list[i]))
			processFolder(input + File.separator + list[i]);
		if(endsWith(list[i], suffix))
			processFile(input, output, list[i]);
	}
}

function processFile(input, output, file) {
	
	run("Set Measurements...", " area mean integrated display redirect=None decimal=3");
	
	// First step consist in opening an image
	// If file format is TIF, images are split into three 8-bit-channels; you MUST verify that channels only contain the expected signal (i.e. no channel merging)
	open(input+File.separator+file);
		if(suffix==".tif") {
		run("Make Composite");
		run("Properties...");
		}	
	
	//we start by counting the number of nuclei in the image
	run("Duplicate...", "duplicate channels=3-3 title=Nuclei"); //Change channel here: nuclei
	selectWindow("Nuclei");
	rename(file+"-Nuclei");	
	run("Gaussian Blur...", "sigma=15");
	run("Save", "save=["+output+File.separator+file+"-NucleiDetection.png]");
	run("Find Maxima...", "prominence=20 output=Count");

	//Cell-related segments in highly confluent cultures will be determined by Voronoi
	selectWindow(file+"-Nuclei");
	setAutoThreshold("Otsu dark");
	run("Convert to Mask");
	run("Voronoi");
	setAutoThreshold("Default dark");
	setThreshold(1, 255);
	run("Convert to Mask");
	run("Dilate");
	run("Dilate");
	run("Outline");
	run("Close-");
	run("Analyze Particles...", "size=0-Infinity exclude add");
	roiManager("SelectAll");
	roiManager("Save", output+File.separator+file+".zip");

	// we have the ROIs with the appropriate size so all we have to do now is apply them to the signal channel and measure signal intensities
	selectWindow(file);
	getPixelSize(unit, pixelWidth, pixelHeight);
	run("Duplicate...", "duplicate channels=1-1 title=alphaSMA"); //Change channel here: alphaSMA
	selectWindow("alphaSMA");
	rename(file+"-alphaSMA");

	//run OrientationJ and more specifically the coherency analysis
	run("OrientationJ Analysis", "tensor=2.0 gradient=1 hsb=on hue=Orientation sat=Coherency bri=Original-Image coherency=on radian=on ");
	selectWindow("OJ-Coherency-1");
	rename(file+"-Coherency");
	run("Properties...", "unit=micron pixel_width=pixelWidth pixel_height=pixelHeight");

	//restore selection and measure the average mean of coherency in the cell shape ROI
	roiManager("Show All");
	roiManager("Measure");
	
	//select the Coherency window and save the file
	run("Save", "save=["+output+File.separator+file+"-Coherency.png]");
	
	//we now measure alphaSMA intensity in the cell shape ROI
	selectWindow(file+"-alphaSMA");
	roiManager("Show None");
	roiManager("Show All");
	roiManager("Measure");

	//save original file with ROIs 
	selectWindow(file);
	roiManager("Show All without labels");
	run("From ROI Manager");
	run("Overlay Options...", "stroke=yellow width=4 fill=none apply");
	run("Flatten");
	run("Save", "save=["+output+File.separator+file+"-ROIs.png]");

	// before we move on to the next image we clear the ROI manager of all the previously identified ROIs and all open windows
	roiManager("Delete");
	run("Close All");

}

	saveAs("alphaSMAResults", output+File.separator+"alphaSMA-Results_"+random+".csv");
	run("Clear Results");
